PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = video_narrative
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Routines
  Routine instructions1
    TextComponent instructions1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the "Pie-man" audio clip.

        Please pay attention to the story.

        Press SPACE when you are ready to listen the clip.
    KeyboardComponent instructions1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine details1
    TextComponent details1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please recall details from the "Pie-man" clip.

        Press SPACE when you are ready to continue.
    KeyboardComponent details1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions2
    TextComponent instructions2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the "Unreheared real-life story" audio clip.

        Please pay attention to the story.

        Press SPACE when you are ready to listen to the clip.
    KeyboardComponent instructions2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine details2
    TextComponent details2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please recall details from the "Unrehearsed real-life story" clip.

        Press SPACE when you are ready to continue.
    KeyboardComponent details2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pieman_audio
    SoundComponent pieman_clip
      sound = audio_clips\audio_1.m4a
      startVal [time (s)] = 0.0
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  Routine unrehearsed_audio
    MovieComponent unrehearsed_clip
      backend = moviepy
      forceEndRoutine = False
      movie = audio_clips\audio_2.m4a
      startVal [time (s)] = 0.0
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Flow
  Routine instructions1
  Routine pieman_audio
  Routine details1
  Routine instructions2
  Routine unrehearsed_audio
  Routine details2
