PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.7000, -0.7000, -0.7000]
  expName = king_devick
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Routines
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the King Devick task.

        You will be presented with one practice card and then three task cards.

        Press SPACE to continue.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine demo_card_instructions
    TextComponent demo_instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the practice card.

        Read the numbers row by row from left to right as quickly as you can without making mistakes. If you do make a mistake, please continue reading the numbers.

        Your goal is to complete this task as quickly as possible.

        Press SPACE to begin. Press SPACE again as soon as you finish reading all numbers.
    KeyboardComponent demo_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine demo_card_instructions_2
    TextComponent demo_instructions_text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the demonstration card.

        Press SPACE to continue.
    KeyboardComponent demo_instructions_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demo_card
    ImageComponent demo_image
      image = king_devick_stimuli\demo_card.jpg
      saveStartStop = False
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent demo_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        from datetime import datetime
        import time
        import os
        import sys
        import csv

        initial_timestamp = time.time()
        clock_time_offset = logging.defaultClock.getTime()
        task_start_timestamp = initial_timestamp - clock_time_offset  # account for timestamp delay from clock creation

        task_start_timestamp_fmt = int(task_start_timestamp * 1e9)
        start_time = datetime.fromtimestamp(task_start_timestamp).strftime("%Y-%m-%d-%H-%M-%S-%f")
      Begin Experiment:
        win.mouseVisible = False

        # setup dirs and files -----
        tasks_dir = os.path.dirname(_thisDir)
        task_dir = os.path.join(tasks_dir, expName)
        par_dir = os.path.join(tasks_dir, "participants", f"participant_{expInfo['participant']}")
        par_task_dir = os.path.join(par_dir, f"{str(expName)}")
        data_dir = os.path.join(par_task_dir, "data")

        try:
            os.mkdir(data_dir)
        except:
            pass

        filename = os.path.join(data_dir, f"{str(expInfo['participant'])}_{str(expInfo['session'])}_{str(expName)}_{start_time}")
        thisExp.dataFileName = filename
        logFile = logging.LogFile(filename +'.log', level=logging.EXP)

        # setup markers -----
        cwd = os.getcwd()
        kernel_socket_path = os.path.join(os.path.dirname(cwd), "main", "kernel_socket")
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker(par_dir)

        # task order -----
        for task_filename in os.listdir(task_dir):
            if "TO" in task_filename:
                task_order_csv = os.path.join(task_dir, task_filename)

        # read task order file -----
        file = open(task_order_csv)
        csvreader = csv.reader(file)

        rows = []
        for row in csvreader:
                rows.append(row[0])
        file.close()

        card_1 = rows[1]
        card_2 = rows[2]
        card_3 = rows[3]
        order = [card_1, card_2, card_3]

        # start experiment marker -----
        marker.send_marker(31, task_start_timestamp_fmt)
      End Experiment:
        # end experiment marker -----
        task_end_timestamp = time.time() - clock_time_offset
        task_end_timestamp_fmt = int(task_end_timestamp * 1e9)
        marker.send_marker(32, task_end_timestamp_fmt)
  Routine post_demo_code
    CodeComponent post_code
      Code Type = Py
  Routine post_stimuli_code
    CodeComponent post_stim_code
      Code Type = Py
  Routine experiment_end_code
    CodeComponent end_code
      Code Type = Py
  Routine done
    TextComponent done_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = The King Devick task is now complete.
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  Routine card_instructions
    TextComponent card_instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a task card.

        Read the numbers row by row from left to right as quickly as you can without making mistakes. If you do make a mistake, please continue reading the numbers.

        Your goal is to complete this task as quickly as possible.

        Press SPACE to begin. Press SPACE again as soon as you finish reading all numbers.
    KeyboardComponent card_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine card
    ImageComponent card_image
      image [set every repeat] = $card_image_path
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent card_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine loop_code
    CodeComponent card_code
      Code Type = Py
      Begin Routine:
        card_image_path = os.path.join(task_dir, "king_devick_stimuli", task_order)
Flow
  Routine initial_exp_code
  Routine instructions
  Routine demo_card_instructions
  Routine demo_card
  LoopInitiator king_devick_loop loopType="TrialHandler"
    conditionsFile = king_devick_TO.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('task_order', 'card 1')]),
      OrderedDict([('task_order', 'card 2')]),
      OrderedDict([('task_order', 'card 3')])]
    Routine loop_code
    Routine card_instructions
    Routine card
  LoopTerminator king_devick_loop
  Routine done
