PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = n_back - alt
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Routines
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        These are the instructions for the N-back experiment.

        Press SPACE to continue.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest_20
    TextComponent rest_20_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
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  Routine one_back_prompt
    TextComponent one_back_prompt_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        1-back trial.

        Press SPACE if the current number matches the previous number.
  Routine trial_one_back
    TextComponent one_back_num_stim
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num_stim
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    KeyboardComponent one_back_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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  Routine two_back_prompt
    TextComponent two_back_prompt_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        2-back trial.

        Press SPACE if the current number matches the number two back.
  Routine trial_two_back
    TextComponent two_back_num_stim
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num_stim
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    KeyboardComponent two_back_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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  Routine main_loop_code
    CodeComponent outer_loop_code
      Code Type = Py
      Begin Routine:
        if task_order == "zero_back1":
            this_loop_conditions = zero_back_csv_list[0]
            text_display = [1, 0, 0]
        elif task_order == "zero_back2":
            this_loop_conditions = zero_back_csv_list[1]
            text_display = [1, 0, 0]
        elif task_order == "zero_back3":
            this_loop_conditions = zero_back_csv_list[2]
            text_display = [1, 0, 0]
        elif task_order == "one_back1":
            this_loop_conditions = one_back_csv_list[0]
            text_display = [0, 1, 0]
        elif task_order == "one_back2":
            this_loop_conditions = one_back_csv_list[1]
            text_display = [0, 1, 0]
        elif task_order == "one_back3":
            this_loop_conditions = one_back_csv_list[2]
            text_display = [0, 1, 0]
        elif task_order == "two_back1":
            this_loop_conditions = two_back_csv_list[0]
            text_display = [0, 0, 1]
        elif task_order == "two_back2":
            this_loop_conditions = two_back_csv_list[1]
            text_display = [0, 0, 1]
        elif task_order == "two_back3":
            this_loop_conditions = two_back_csv_list[2]
            text_display = [0, 0, 1]
  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        import os
        cwd = os.getcwd()

        for filename in os.listdir(cwd):
            if "n_back_task_order-" in filename:
                task_order_csv = filename

        conditions_dir = os.path.join(cwd, "n_back_conditions")

        zero_back_csv_list = []
        zero_back_match_list = []
        one_back_csv_list = []
        two_back_csv_list = []

        # create file names and paths for each condition
        for csv_filename in os.listdir(conditions_dir):
            if "zero" in csv_filename:
                zero_back_csv_list.append(os.path.join("n_back_conditions", csv_filename))
                # get stimulus condition for 0-back
                split_csv = csv_filename.split("-")
                match = split_csv[1].split("_")[1]
                zero_back_match_list.append(match)
            elif "one" in csv_filename:
                one_back_csv_list.append(os.path.join("n_back_conditions", csv_filename))
            elif "two" in csv_filename:
                two_back_csv_list.append(os.path.join("n_back_conditions", csv_filename))
  Routine stim
    TextComponent num_stim_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num_stim
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    KeyboardComponent num_stim_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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    TextComponent stim_interval_text
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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  Routine trial_instructions
    TextComponent exp_zero_back_text
      letterHeight = 0.1
      opacity [set every repeat] = text_display[0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $"0-back trial. \n\n Press SPACE if the number is: " + str(match)
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    TextComponent exp_one_back_text
      letterHeight = 0.1
      opacity [set every repeat] = text_display[1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        1-Back trial.

        Press SPACE if the current number matches the previous number.
    TextComponent exp_two_back_text
      letterHeight = 0.1
      opacity [set every repeat] = text_display[2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        2-BACK trial.

        Press SPACE if the current number matches the number two back.
Flow
  Routine initial_exp_code
  Routine instructions
  LoopInitiator n_back_loop loopType="TrialHandler"
    conditionsFile = $task_order_csv
    loopType = sequential
    nReps = 1
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    Routine main_loop_code
    Routine trial_instructions
    LoopInitiator stim_loop loopType="TrialHandler"
      conditionsFile = $this_loop_conditions
      loopType = sequential
      nReps = 1
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      Routine stim
    LoopTerminator stim_loop
  LoopTerminator n_back_loop
