PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = resting_state
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Routines
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"This is the 7-minute resting state experiment\n\nPlease sit still with your " + str(resting_state_order[0]) + ".\n\n" + "Halfway through the experiment, you will hear a tone. Please sit still with your " + str(resting_state_order[1]) + " for the remainder of the experiment. You will hear a second tone when the experiment is complete.\n\nPress SPACE when you are ready to begin."
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    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine trial
    TextComponent trial_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 420
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    SoundComponent halfway_tone
      sound = A
      startVal [time (s)] = 210
      stopVal [duration (s)] = 2
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    PolygonComponent trial_cross
      fillColor = white
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 420
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  Routine done
    SoundComponent done_sound
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent done_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = The resting state experiment is now complete.
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Begin Experiment:
        import os
        import csv
        # path to kernel socket module
        cwd = os.getcwd()
        os.chdir("..")
        kernel_socket_path = os.path.join(os.getcwd(), "main", "kernel_socket")
        os.chdir(cwd)
        import sys
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker()

        for filename in os.listdir(cwd):
            if "resting_state_task_order-" in filename:
                task_order_csv = filename

        file = open(task_order_csv)
        csvreader = csv.reader(file)

        rows = []
        for row in csvreader:
                rows.append(row[0])
        file.close()

        resting_state_1 = rows[1]
        resting_state_2 = rows[2]
        resting_state_order = [resting_state_1, resting_state_2]

        marker.send_marker("experiment_start")
  Routine experiment_end_code
    CodeComponent end_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("experiment_end")
Flow
  Routine initial_exp_code
  Routine welcome
  Routine trial
  Routine done
  Routine experiment_end_code
