PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = video_narrative
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Routines
  Routine instructions1
    TextComponent instructions1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the "Catch Me If You Can" video clip.

        Please pay attention to the story.

        Press SPACE when you are ready to watch the clip.
    KeyboardComponent instructions1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine catchme_video
    MovieComponent catchme_clip
      backend = moviepy
      forceEndRoutine = False
      movie = video_clips\CMIYC_clip.mov
      startVal [time (s)] = 0.0
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  Routine details1
    TextComponent details1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please recall details from the "Catch Me If You Can" clip.

        Press SPACE when you are ready to continue.
    KeyboardComponent details1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions2
    TextComponent instructions2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the "Sherlock" video clip.

        Please pay attention to the story.

        Press SPACE when you are ready to watch the clip.
    KeyboardComponent instructions2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sherlock_video
    MovieComponent sherlock_clip
      backend = moviepy
      forceEndRoutine = False
      movie = video_clips\sherlock_part1_clip.mov
      startVal [time (s)] = 0.0
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  Routine details2
    TextComponent details2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please recall details from the "Sherlock" clip.

        Press SPACE when you are ready to continue.
    KeyboardComponent details2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Begin Experiment:
        import os
        # path to kernel socket module
        cwd = os.getcwd()
        os.chdir("..")
        kernel_socket_path = os.path.join(os.getcwd(), "main", "kernel_socket")
        os.chdir(cwd)
        import sys
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker()

        marker.send_marker("experiment_start")
  Routine experiment_end_code
    CodeComponent end_code
      Code Type = Py
      Begin Experiment:
        marker.send_marker("experiment_end")
Flow
  Routine initial_exp_code
  Routine instructions1
  Routine catchme_video
  Routine details1
  Routine instructions2
  Routine sherlock_video
  Routine details2
  Routine experiment_end_code
